<Components>

	<Server>
		<attr name="port" required="yes" default="80">
			<comment>Server port (for Unix derivatives, use a value greater than 1024)</comment>
		</attr>
		<attr name="ssl" required="no" default="no" options="yes|no">
			<comment>Use secure sockets layer for connection to the server</comment>
		</attr>
		<attr name="requireAuthentication" required="no" default="no" options="yes|no">
			<comment>Require authentication for connection to the server</comment>
		</attr>
		<attr name="proxyIPAddress" required="no" default="">
			<comment>The IP address of the proxy server (or blank if no proxy server)</comment>
		</attr>
		<attr name="proxyPort" required="no" default="">
			<comment>The port of the proxy server (or blank if no proxy server)</comment>
		</attr>
		<attr name="proxyUsername" required="no" default="">
			<comment>The username for proxy authentication (or blank if proxy authentication is not used)</comment>
		</attr>
		<attr name="proxyPassword" required="no" default="">
			<comment>The password for proxy authentication (or blank if proxy authentication is not used)</comment>
		</attr>
		<attr name="usersClassName" required="no" default="org.rsna.server.UsersXmlFileImpl">
			<comment>The Java class for user authentication. Do not change this unless you know what you're doing.</comment>
		</attr>
	</Server>

	<Pipeline>
		<attr name="name" required="yes" default="HttpImportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
	</Pipeline>

	<ImportService>
		<attr name="name" required="yes" default="HttpImportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.HttpImportService" editable="no"/>
		<attr name="root" required="yes" default="roots/HttpImportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="port" required="yes" default="7777">
			<comment>Port on which the HttpImportService listens for connections</comment>
		</attr>
		<attr name="ssl" required="no" default="no" options="yes|no">
			<comment>Use SSL for communication (yes/no)</comment>
		</attr>
		<attr name="zip" required="no" default="no" options="yes|no">
			<comment>Unzip received data objects (yes/no)</comment>
		</attr>
		<attr name="requireAuthentication" required="no" default="no" options="yes|no">
			<comment>Require credentials for all connections (yes/no)</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="logConnections" required="yes" default="no" options="all|rejected|no">
			<comment>Log IP addresses of received connections</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/HttpImportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>

		<child name="accept" required="no" allowMultiples="yes">
			<attr name="ip" required="yes" default="">
				<comment>IP address from which to allow connections</comment>
			</attr>
		</child>

		<child name="reject" required="no" allowMultiples="yes">
			<attr name="ip" required="yes" default="">
				<comment>IP address from which to reject connections</comment>
			</attr>
		</child>
	</ImportService>

	<ImportService>
		<attr name="name" required="yes" default="PollingHttpImportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.PollingHttpImportService" editable="no"/>
		<attr name="root" required="yes" default="roots/PollingHttpImportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="url" required="yes" default="">
			<comment>The URL of the PolledHttpExportService to be polled for data objects</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/PollingHttpImportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</ImportService>

	<ImportService>
		<attr name="name" required="yes" default="DirectoryImportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DirectoryImportService" editable="no"/>
		<attr name="root" required="yes" default="roots/DirectoryImportService">
			<comment>Storage directory to monitor for data objects to import</comment>
		</attr>
		<attr name="minAge" required="no" default="5000">
			<comment>The minimum age of objects in milliseconds before import</comment>
		</attr>
		<attr name="fsName" required="no" default="">
			<comment>File System name to insert in DicomObjects (optional)</comment>
		</attr>
		<attr name="fsNameTag" required="no" default="">
			<comment>DICOM tag in which to store the File System name (ggggeeee)</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/DirectoryImportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</ImportService>

	<ImportService>
		<attr name="name" required="yes" default="ArchiveImportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.ArchiveImportService" editable="no"/>
		<attr name="root" required="yes" default="roots/ArchiveImportService">
			<comment>Storage directory for use by the stage for temporary data (must be unique)</comment>
		</attr>
		<attr name="treeRoot" default="archive" required="yes">
			<comment>The root directory of the archive</comment>
		</attr>
		<attr name="minAge" required="no" default="5000">
			<comment>The minimum age of objects in milliseconds before import</comment>
		</attr>
		<attr name="fsName" required="no" default="">
			<comment>File System name to insert in DicomObjects (optional)</comment>
		</attr>
		<attr name="fsNameTag" required="no" default="">
			<comment>DICOM tag in which to store the File System name (ggggeeee)</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/ArchiveImportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</ImportService>

	<ImportService>
		<attr name="name" required="yes" default="DicomImportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DicomImportService" editable="no"/>
		<attr name="root" required="yes" default="roots/DicomImportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="port" required="yes" default="7777">
			<comment>Port on which the DicomImportService listens for connections</comment>
		</attr>
		<attr name="callingAETTag" required="no" default="">
			<comment>DICOM tag in which to store the Calling AE Title (ggggeeee, optional)</comment>
		</attr>
		<attr name="calledAETTag" required="no" default="">
			<comment>DICOM tag in which to store the Called AE Title (ggggeeee, optional)</comment>
		</attr>
		<attr name="timeTag" required="no" default="">
			<comment>DICOM tag in which to store the time of the received connection (ggggeeee, optional)</comment>
		</attr>
		<attr name="logConnections" required="yes" default="no" options="all|rejected|no">
			<comment>Log IP addresses of received connections</comment>
		</attr>
		<attr name="suppressDuplicates" required="no" default="no" options="yes|no">
			<comment>Ignore objects with the same SOPInstanceUID as one of the last 10 objects received</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/DicomImportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>

		<child name="accept" required="no" allowMultiples="yes">
			<attr name="ip" required="yes" default="">
				<comment>IP address from which to allow connections</comment>
			</attr>
		</child>

		<child name="reject" required="no" allowMultiples="yes">
			<attr name="ip" required="yes" default="">
				<comment>IP address from which to reject connections</comment>
			</attr>
		</child>

		<child name="accept" required="no" allowMultiples="yes">
			<attr name="calledAET" required="yes" default="">
				<comment>Called AE Title for which to allow connections</comment>
			</attr>
		</child>

		<child name="reject" required="no" allowMultiples="yes">
			<attr name="calledAET" required="yes" default="">
				<comment>Called AE Title for which to reject connections</comment>
			</attr>
		</child>

		<child name="accept" required="no" allowMultiples="yes">
			<attr name="callingAET" required="yes" default="">
				<comment>Calling AE Title from which to allow connections</comment>
			</attr>
		</child>

		<child name="reject" required="no" allowMultiples="yes">
			<attr name="callingAET" required="yes" default="">
				<comment>Calling AE Title from which to reject connections</comment>
			</attr>
		</child>
	</ImportService>

	<Processor>
		<attr name="name" required="yes" default="ObjectCache">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="id" required="yes" default="ObjectCache">
			<comment>This field is required, and must be unique</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.ObjectCache" editable="no"/>
		<attr name="root" default="roots/ObjectCache" required="yes">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="MemoryMonitor">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.ObjectCache" editable="no"/>
		<attr name="interval" required="no" default="1">
			<comment>Interval (in objects received) between actions taken by this stage</comment>
		</attr>
		<attr name="collectGarbage" required="no" default="yes" options="yes|no">
			<comment>Run system garbage collection</comment>
		</attr>
		<attr name="logMemoryInUse" required="no" default="yes" options="yes|no">
			<comment>Make a log entry containing the current heap size</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="DicomFilter">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DicomFilter" editable="no"/>
		<attr name="root" required="yes" default="roots/DicomFilter">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/DicomFilter.script">
			<comment>The filter script file</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/DicomFilter">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="XmlFilter">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.XmlFilter" editable="no"/>
		<attr name="root" required="yes" default="roots/XmlFilter">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/XmlFilter.script">
			<comment>The filter script file</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/XmlFilter">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="ZipFilter">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.ZipFilter" editable="no"/>
		<attr name="root" required="yes" default="roots/ZipFilter">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/ZipFilter.script">
			<comment>The filter script file</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/ZipFilter">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="IDMap">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.IDMap" editable="no"/>
		<attr name="root" required="yes" default="roots/IDMap">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="ObjectTracker">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.ObjectTracker" editable="no"/>
		<attr name="root" required="yes" default="roots/ObjectTracker">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="DatabaseVerifier">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DatabaseVerifier" editable="no"/>
		<attr name="root" required="yes" default="roots/DatabaseVerifier">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="url" required="yes" default="">
			<comment>The URL of the external database's DatabaseExportService</comment>
		</attr>
		<attr name="username" required="no" default="">
			<comment>The username for authentication, if required by the external system</comment>
		</attr>
		<attr name="password" required="no" default="">
			<comment>The password for authentication, if required by the external system</comment>
		</attr>
		<attr name="interval" required="no" default="10000">
			<comment>Time in milliseconds between polls of the external system for verification</comment>
		</attr>
		<attr name="maxAge" required="no" default="0">
			<comment>The minimum time in days that an unverified object remains in the unverified queue (0 = forever)</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="DicomDecompressor">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DicomDecompressor" editable="no"/>
		<attr name="root" required="yes" default="roots/DicomDecompressor">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/DicomDecompressor.script">
			<comment>The script file determining whether objects are to be decompressed</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/DicomDecompressor">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="DicomTranscoder">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DicomTranscoder" editable="no"/>
		<attr name="root" required="yes" default="roots/DicomDecompressor">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/DicomTranscoder.script">
			<comment>The script file determining whether objects are to be transcoded</comment>
		</attr>
		<attr name="tsuid" required="yes" default="">
			<comment>The transfer syntax UID to which to convert selected DicomObjects</comment>
		</attr>
		<attr name="quality" required="no" default="100">
			<comment>The quality parameter to use for lossy compression (1-100), ignored for lossless compression</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/DicomTranscoder">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="DicomAnonymizer">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DicomAnonymizer" editable="no"/>
		<attr name="root" required="yes" default="roots/DicomAnonymizer">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="lookupTable" required="no" default="scripts/LookupTable.properties">
			<comment>The lookup table file for special de-identification (optional)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/DicomAnonymizer.script">
			<comment>The script file containing the anonymization instructions</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/DicomAnonymizer">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="DicomPixelAnonymizer">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DicomPixelAnonymizer" editable="no"/>
		<attr name="root" required="yes" default="roots/DicomPixelAnonymizer">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/DicomPixelAnonymizer.script">
			<comment>The script file containing document signatures and blanking regions</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/DicomPixelAnonymizer">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="XmlAnonymizer">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.XmlAnonymizer" editable="no"/>
		<attr name="root" required="yes" default="roots/XmlAnonymizer">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/XmlAnonymizer.script">
			<comment>The script file containing the anonymization instructions</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/XmlAnonymizer">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<Processor>
		<attr name="name" required="yes" default="ZipAnonymizer">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.ZipAnonymizer" editable="no"/>
		<attr name="root" required="yes" default="roots/ZipAnonymizer">
			<comment>Storage directory for use by the stage (must be unique)</comment>
		</attr>
		<attr name="script" required="yes" default="scripts/ZipAnonymizer.script">
			<comment>The script file containing the anonymization instructions</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/ZipAnonymizer">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</Processor>

	<StorageService>
		<attr name="name" required="yes" default="FileStorageService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="id" required="yes" default="FileStorageService">
			<comment>
				This field is required only when the stage is to be referenced
				by another stage. If present, it must be unique.
			</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.FileStorageService" editable="no"/>
		<attr name="root" required="yes" default="roots/FileStorageService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="type" required="yes" default="none" options="year|month|week|date|none">
			<comment>Structure of the storage tree</comment>
		</attr>
		<attr name="timeDepth" required="no" default="0">
			<comment>Length of time in days before studies are automatically purged (0 = forever)</comment>
		</attr>
		<attr name="acceptDuplicateUIDs" required="no" default="yes" options="yes|no">
			<comment>Yes: keep all objects; no: overwrite objects with the same SOPInstanceUID</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="returnStoredFile" required="no" default="yes" options="yes|no">
			<comment>Yes: return the stored object; no: return the original object</comment>
		</attr>
		<attr name="setWorldReadable" required="no" default="no" options="yes|no">
			<comment>Set the read permission on stored files</comment>
		</attr>
		<attr name="setWorldWritable" required="no" default="no" options="yes|no">
			<comment>Set the write permission on stored files</comment>
		</attr>
		<attr name="fsNameTag" required="no" default="">
			<comment>DICOM tag to use to obtain the File System name for storage</comment>
		</attr>
		<attr name="autoCreateUser" required="no" default="no" options="yes|no">
			<comment>Automatically create user account for the fsName</comment>
		</attr>
		<attr name="port" required="no" default="0">
			<comment>Port to use for a server to provide web access to stored objects</comment>
		</attr>
		<attr name="ssl" required="no" default="no" options="yes|no">
			<comment>Require secure sockets layer for connection to the server</comment>
		</attr>
		<attr name="requireAuthentication" required="no" default="no" options="yes|no">
			<comment>Require authentication for connection to the server</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/FileStorageService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>

		<child name="jpeg" required="no" allowMultiples="yes">
			<attr name="frame" required="no" default="" options="first|middle|last|all">
				<comment>Choose which frame(s) to use to create JPEG(s)</comment>
			</attr>
			<attr name="wmax" required="no" default="10000">
				<comment>Maximum width of created JPEG image</comment>
			</attr>
			<attr name="wmin" required="no" default="96">
				<comment>Minimum width of created JPEG image</comment>
			</attr>
			<attr name="q" required="no" default="-1">
				<comment>JPEG quality (0-100; -1: system default)</comment>
			</attr>
		</child>

	</StorageService>

	<StorageService>
		<attr name="name" required="yes" default="BasicFileStorageService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="id" required="yes" default="ObjectCache">
			<comment>
				This field is required only when the stage is to be referenced
				by another stage. If present, it must be unique.
			</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.BasicFileStorageService" editable="no"/>
		<attr name="root" required="yes" default="roots/BasicFileStorageService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="nLevels" required="yes" default="3">
			<comment>Depth of the storage tree</comment>
		</attr>
		<attr name="maxSize" required="no" default="200">
			<comment>Maximum size of each folder in the hierarchy</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="returnStoredFile" required="no" default="yes" options="yes|no">
			<comment>Yes: return the stored object; no: return the original object</comment>
		</attr>
		<attr name="logDuplicates" required="no" default="no" options="yes|no">
			<comment>Make a log entry whenever a duplicate SOPInstanceUID is stored</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/BasicFileStorageService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>

		<child name="jpeg" required="no" allowMultiples="yes">
			<attr name="frame" required="no" default="" options="first|middle|last|all">
				<comment>Choose which frame(s) to use to create JPEG(s)</comment>
			</attr>
			<attr name="wmax" required="no" default="10000">
				<comment>Maximum width of created JPEG image</comment>
			</attr>
			<attr name="wmin" required="no" default="96">
				<comment>Minimum width of created JPEG image</comment>
			</attr>
			<attr name="q" required="no" default="-1">
				<comment>JPEG quality (0-100; -1: system default)</comment>
			</attr>
		</child>

	</StorageService>

	<StorageService>
		<attr name="name" required="yes" default="DirectoryStorageService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DirectoryStorageService" editable="no"/>
		<attr name="root" required="yes" default="roots/DirectoryStorageService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="cacheID" required="yes" default="">
			<comment>
				The ID of the ObjectCache stage to use to obtain the storage hierarchy
				(if missing or empty, use the hierarchy from the current object)
			</comment>
		</attr>
		<attr name="structure" required="no" default="">
			<comment>Sequence of DICOM tags specifying the elements that define the hierarchy</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="returnStoredFile" required="no" default="yes" options="yes|no">
			<comment>Yes: return the stored object; no: return the original object</comment>
		</attr>
		<attr name="logDuplicates" required="no" default="no" options="yes|no">
			<comment>Make a log entry whenever a duplicate SOPInstanceUID is stored</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/BasicFileStorageService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</StorageService>

	<ExportService>
		<attr name="name" required="yes" default="HttpExportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.HttpExportService" editable="no"/>
		<attr name="root" required="yes" default="roots/HttpExportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="url" required="yes" default="">
			<comment>URL of the destination HttpImportService (starting with http:// or https://)</comment>
		</attr>
		<attr name="zip" required="no" default="no" options="yes|no">
			<comment>Zip data objects before transmission (yes/no)</comment>
		</attr>
		<attr name="username" required="no" default="">
			<comment>The username for authentication, if required by the destination system</comment>
		</attr>
		<attr name="password" required="no" default="">
			<comment>The password for authentication, if required by the destination system</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="dicomScript" required="no" default="">
			<comment>The script file determining whether DicomObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="xmlScript" required="no" default="">
			<comment>The script file determining whether XmlObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="zipScript" required="no" default="">
			<comment>The script file determining whether ZipObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="interval" required="no" default="5000">
			<comment>Sleep time in milliseconds between polls of the export queue</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/HttpExportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</ExportService>

	<ExportService>
		<attr name="name" required="yes" default="PolledHttpExportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.PolledHttpExportService" editable="no"/>
		<attr name="root" required="yes" default="roots/PolledHttpExportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="port" required="yes" default="7777">
			<comment>Port on which the PolledHttpImportService listens for connections</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="dicomScript" required="no" default="">
			<comment>The script file determining whether DicomObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="xmlScript" required="no" default="">
			<comment>The script file determining whether XmlObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="zipScript" required="no" default="">
			<comment>The script file determining whether ZipObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/HttpExportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</ExportService>

	<ExportService>
		<attr name="name" required="yes" default="FtpExportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.FtpExportService" editable="no"/>
		<attr name="root" required="yes" default="roots/FtpExportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="url" required="yes" default="">
			<comment>URL of the destination FTP site (ftp://ip:port/path)</comment>
		</attr>
		<attr name="username" required="yes" default="username">
			<comment>The username for authentication, if required by the destination system</comment>
		</attr>
		<attr name="password" required="yes" default="password">
			<comment>The password for authentication, if required by the destination system</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="dicomScript" required="no" default="">
			<comment>The script file determining whether DicomObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="xmlScript" required="no" default="">
			<comment>The script file determining whether XmlObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="zipScript" required="no" default="">
			<comment>The script file determining whether ZipObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="interval" required="no" default="5000">
			<comment>Sleep time in milliseconds between polls of the export queue</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/HttpExportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</ExportService>

	<ExportService>
		<attr name="name" required="yes" default="AimExportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.AimExportService" editable="no"/>
		<attr name="root" required="yes" default="roots/AimExportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="url" required="yes" default="">
			<comment>URL of the destination AIM data service (http://ip:port/path)</comment>
		</attr>
		<attr name="xmlScript" required="no" default="">
			<comment>The script file determining whether XmlObjects are to be accepted for transmission</comment>
		</attr>
		<attr name="logResponses" required="yes" default="no" options="all|failed|none">
			<comment>Log the contents of the responses from the AIM data service</comment>
		</attr>
		<attr name="interval" required="no" default="5000">
			<comment>Sleep time in milliseconds between polls of the export queue</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/HttpExportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
	</ExportService>

	<ExportService>
		<attr name="name" required="yes" default="DatabaseExportService">
			<comment>This field should be unique, at least within its pipeline.</comment>
		</attr>
		<attr name="class" required="yes" default="org.rsna.ctp.stdstages.DatabaseExportService" editable="no"/>
		<attr name="root" required="yes" default="roots/DatabaseExportService">
			<comment>Storage directory for use by the stage for data (must be unique)</comment>
		</attr>
		<attr name="adapterClass" required="yes" default="">
			<comment>The fully qualified name of the DatabaseAdapter class that provides the interface to the external database</comment>
		</attr>
		<attr name="poolSize" required="no" default="1">
			<comment>The number of active DatabaseAdapters to run concurrently</comment>
		</attr>
		<attr name="fileStorageServiceID" required="no" default="">
			<comment>The ID of the StorageService that manages objects referenced by the data stored in the database</comment>
		</attr>
		<attr name="acceptDicomObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received DicomObjects (yes/no)</comment>
		</attr>
		<attr name="acceptXmlObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received XmlObjects</comment>
		</attr>
		<attr name="acceptZipObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received ZipObjects</comment>
		</attr>
		<attr name="acceptFileObjects" required="no" default="yes" options="yes|no">
			<comment>Accept received FileObjects</comment>
		</attr>
		<attr name="dicomScript" required="no" default="">
			<comment>The script file determining whether DicomObjects are to be accepted for export</comment>
		</attr>
		<attr name="xmlScript" required="no" default="">
			<comment>The script file determining whether XmlObjects are to be accepted for export</comment>
		</attr>
		<attr name="zipScript" required="no" default="">
			<comment>The script file determining whether ZipObjects are to be accepted for export</comment>
		</attr>
		<attr name="interval" required="no" default="5000">
			<comment>Sleep time in milliseconds between polls of the export queue</comment>
		</attr>
		<attr name="quarantine" required="no" default="quarantines/HttpExportService">
			<comment>Storage directory for quarantined objects</comment>
		</attr>
		<attr name="port" required="no" default="">
			<comment>The port on which the DatabaseExportService listens for request for verification of objects</comment>
		</attr>
		<attr name="ssl" required="no" default="no" options="yes|no">
			<comment>Whether the verification service is to use SSL for communication</comment>
		</attr>
	</ExportService>

</Components>

